CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "Segmentaton")
    Name to assign these images:Pancreas
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_Simple Segmentation")
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:Mask
    Name the output image:Mask_islet
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.9961
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
Threshold:[module_num:6|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
    Select the input image:Mask
    Name the output image:Mask_SampleBackground
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.9922
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
ColorToGray:[module_num:7|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enabled:False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
    Select the input image:Mask
    Conversion method:Combine
    Image type:Channels
    Name the output image:OrigGray
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    Channel count:1
    Channel number:1
    Relative weight of the channel:1.0
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
ErodeImage:[module_num:8|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
    Select the input image:Mask_islet
    Name the output image:Mask_islet_Erode
    Structuring element:disk,10

DilateImage:[module_num:9|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
    Select the input image:Mask_islet_Erode
    Name the output image:Mask_islet_Dilate
    Structuring element:disk,15

UnmixColors:[module_num:10|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
    Stain count:3
    Select the input color image:Pancreas
    Name the output image:Hematoxylin_Pancreas
    Stain:Hematoxylin
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    Name the output image:Eosin_Pancreas
    Stain:Eosin
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    Name the output image:DAB_Pancreas
    Stain:DAB
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
MaskImage:[module_num:11|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
    Select the input image:DAB_Pancreas
    Name the output image:Masked_Islet
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask_islet_Dilate
    Invert the mask?:No

MaskImage:[module_num:12|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
    Select the input image:DAB_Pancreas
    Name the output image:Masked_Background
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask_SampleBackground
    Invert the mask?:No

MaskImage:[module_num:13|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
    Select the input image:Masked_Background
    Name the output image:Masked_Background_w_Islet
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask_islet_Dilate
    Invert the mask?:Yes

MeasureImageIntensity:[module_num:14|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
    Select images to measure:Masked_Background_w_Islet, Masked_Islet
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\From G-drive\\Conventional microscopy\\BL\\Processing\\CellProfiler results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Intensity_StdIntensity_Masked_Background_w_Islet,Image|Intensity_StdIntensity_Masked_Islet,Image|Intensity_PercentMaximal_Masked_Islet,Image|Intensity_PercentMaximal_Masked_Background_w_Islet,Image|Intensity_MinIntensity_Masked_Islet,Image|Intensity_MinIntensity_Masked_Background_w_Islet,Image|Intensity_MedianIntensity_Masked_Background_w_Islet,Image|Intensity_MedianIntensity_Masked_Islet,Image|Intensity_MeanIntensity_Masked_Background_w_Islet,Image|Intensity_MeanIntensity_Masked_Islet,Image|Intensity_UpperQuartileIntensity_Masked_Islet,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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